run("MIST", "gridwidth=17 gridheight=20 starttile=1 imagedir=[\\\\10.10.10.1\\NAS Processed Images\\20211125_20211123_98plex_control_seq_complete_processed\\registered\\cyc_1_cy3] filenamepattern=FocalStack_{ppp}.tif filenamepatterntype=SEQUENTIAL gridorigin=UR assemblefrommetadata=false assemblenooverlap=false globalpositionsfile=[] numberingpattern=HORIZONTALCOMBING startrow=0 startcol=0 extentwidth=17 extentheight=20 timeslices=0 istimeslicesenabled=false outputpath=[\\\\10.10.10.1\\NAS Processed Images\\20211125_20211123_98plex_control_seq_complete_processed\\stitched] displaystitching=false outputfullimage=true outputmeta=true outputimgpyramid=false blendingmode=OVERLAY blendingalpha=NaN outfileprefix=img- programtype=AUTO numcputhreads=20 loadfftwplan=true savefftwplan=true fftwplantype=MEASURE fftwlibraryname=libfftw3 fftwlibraryfilename=libfftw3.dll planpath=[C:\\Program Files\\fiji-win64\\Fiji.app\\lib\\fftw\\fftPlans] fftwlibrarypath=[C:\\Program Files\\fiji-win64\\Fiji.app\\lib\\fftw] stagerepeatability=0 horizontaloverlap=NaN verticaloverlap=NaN numfftpeaks=0 overlapuncertainty=NaN isusedoubleprecision=false isusebioformats=false issuppressmodelwarningdialog=false isenablecudaexceptions=false translationrefinementmethod=SINGLE_HILL_CLIMB numtranslationrefinementstartpoints=16 headless=false loglevel=MANDATORY debuglevel=NONE");